PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['90_B_Elbow_Circle_Down3.mp4', '90_R_Elbow_Twist_Self24.mp4', '90_Adducted_Bent_5_Mouth_Lateral_Forward18.mp4', '1_ulnar.PNG', '1.PNG', '3.PNG', '4.PNG', '5.PNG', '8.PNG', '10.PNG', '90_1_Elbow_Circle_Down24.mp4', '90_1_Elbow_Circle_Forward22.mp4', '90_1_Elbow_Circle_Self23.mp4', '90_1_Elbow_Lateral_Down27.mp4', '90_1_Elbow_Lateral_Forward25.mp4', '90_1_Elbow_Lateral_Self26.mp4', '90_1_Elbow_Twist_Down21.mp4', '90_1_Elbow_Twist_Forward19.mp4', '90_1_Elbow_Twist_Self20.mp4', '90_1_Mouth_Circle_Down15.mp4', '90_1_Mouth_Circle_Forward13.mp4', '90_1_Mouth_Circle_Self14.mp4', '90_1_Mouth_Lateral_Down18.mp4', '90_1_Mouth_Lateral_Forward16.mp4', '90_1_Mouth_Lateral_Self17.mp4', '90_1_Mouth_Twist_Down12.mp4', '90_1_Mouth_Twist_Forward10.mp4', '90_1_Mouth_Twist_Self11.mp4', '90_1_Neutral_Circle_Down6.mp4', '90_1_Neutral_Circle_Forward4.mp4', '90_1_Neutral_Circle_Self5.mp4', '90_1_Neutral_Lateral_Down9.mp4', '90_1_Neutral_Lateral_Forward7.mp4', '90_1_Neutral_Lateral_Self8.mp4', '90_1_Neutral_Twist_Down3.mp4', '90_1_Neutral_Twist_Forward1.mp4', '90_1_Neutral_Twist_Self2.mp4', '90_1_Ulnar_Elbow_Circle_Down24.mp4', '90_1_Ulnar_Elbow_Circle_Forward22.mp4', '90_1_Ulnar_Elbow_Circle_Self23.mp4', '90_1_Ulnar_Elbow_Lateral_Down27.mp4', '90_1_Ulnar_Elbow_Lateral_Forward25.mp4', '90_1_Ulnar_Elbow_Lateral_Self26.mp4', '90_1_Ulnar_Elbow_Twist_Down21.mp4', '90_1_Ulnar_Elbow_Twist_Forward19.mp4', '90_1_Ulnar_Elbow_Twist_Self20.mp4', '90_1_Ulnar_Mouth_Circle_Down15.mp4', '90_1_Ulnar_Mouth_Circle_Forward13.mp4', '90_1_Ulnar_Mouth_Circle_Self14.mp4', '90_1_Ulnar_Mouth_Lateral_Down18.mp4', '90_1_Ulnar_Mouth_Lateral_Forward16.mp4', '90_1_Ulnar_Mouth_Lateral_Self17.mp4', '90_1_Ulnar_Mouth_Twist_Down12.mp4', '90_1_Ulnar_Mouth_Twist_Forward10.mp4', '90_1_Ulnar_Mouth_Twist_Self11.mp4', '90_1_Ulnar_Neutral_Circle_Down6.mp4', '90_1_Ulnar_Neutral_Circle_Forward4.mp4', '90_1_Ulnar_Neutral_Circle_Self5.mp4', '90_1_Ulnar_Neutral_Lateral_Down9.mp4', '90_1_Ulnar_Neutral_Lateral_Forward7.mp4', '90_1_Ulnar_Neutral_Lateral_Self8.mp4', '90_1_Ulnar_Neutral_Twist_Down3.mp4', '90_1_Ulnar_Neutral_Twist_Forward1.mp4', '90_1_Ulnar_Neutral_Twist_Self2.mp4', '90_3_Elbow_Circle_Down24.mp4', '90_3_Elbow_Circle_Forward22.mp4', '90_3_Elbow_Circle_Self23.mp4', '90_3_Elbow_Lateral_Down27.mp4', '90_3_Elbow_Lateral_Forward25.mp4', '90_3_Elbow_Lateral_Self26.mp4', '90_3_Elbow_Twist_Down21.mp4', '90_3_Elbow_Twist_Forward19.mp4', '90_3_Elbow_Twist_Self20.mp4', '90_3_Mouth_Circle_Down15.mp4', '90_3_Mouth_Circle_Forward13.mp4', '90_3_Mouth_Circle_Self14.mp4', '90_3_Mouth_Lateral_Down18.mp4', '90_3_Mouth_Lateral_Forward16.mp4', '90_3_Mouth_Lateral_Self17.mp4', '90_3_Mouth_Twist_Down12.mp4', '90_3_Mouth_Twist_Forward10.mp4', '90_3_Mouth_Twist_Self11.mp4', '90_3_Neutral_Circle_Down6.mp4', '90_3_Neutral_Circle_Forward4.mp4', '90_3_Neutral_Circle_Self5.mp4', '90_3_Neutral_Lateral_Down9.mp4', '90_3_Neutral_Lateral_Forward7.mp4', '90_3_Neutral_Lateral_Self8.mp4', '90_3_Neutral_Twist_Down3.mp4', '90_3_Neutral_Twist_Forward1.mp4', '90_3_Neutral_Twist_Self2.mp4', '90_4_Elbow_Circle_Down24.mp4', '90_4_Elbow_Circle_Forward22.mp4', '90_4_Elbow_Circle_Self23.mp4', '90_4_Elbow_Lateral_Down27.mp4', '90_4_Elbow_Lateral_Forward25.mp4', '90_4_Elbow_Lateral_Self26.mp4', '90_4_Elbow_Twist_Down21.mp4', '90_4_Elbow_Twist_Forward19.mp4', '90_4_Elbow_Twist_Self20.mp4', '90_4_Mouth_Circle_Down15.mp4', '90_4_Mouth_Circle_Forward13.mp4', '90_4_Mouth_Circle_Self14.mp4', '90_4_Mouth_Lateral_Down18.mp4', '90_4_Mouth_Lateral_Forward16.mp4', '90_4_Mouth_Lateral_Self17.mp4', '90_4_Mouth_Twist_Down12.mp4', '90_4_Mouth_Twist_Forward10.mp4', '90_4_Mouth_Twist_Self11.mp4', '90_4_Neutral_Circle_Down6.mp4', '90_4_Neutral_Circle_Forward4.mp4', '90_4_Neutral_Circle_Self5.mp4', '90_4_Neutral_Lateral_Down9.mp4', '90_4_Neutral_Lateral_Forward7.mp4', '90_4_Neutral_Lateral_Self8.mp4', '90_4_Neutral_Twist_Down3.mp4', '90_4_Neutral_Twist_Forward1.mp4', '90_4_Neutral_Twist_Self2.mp4', '90_5_Elbow_Circle_Down24.mp4', '90_5_Elbow_Circle_Forward22.mp4', '90_5_Elbow_Circle_Self23.mp4', '90_5_Elbow_Lateral_Down27.mp4', '90_5_Elbow_Lateral_Forward25.mp4', '90_5_Elbow_Lateral_Self26.mp4', '90_5_Elbow_Twist_Down21.mp4', '90_5_Elbow_Twist_Forward19.mp4', '90_5_Elbow_Twist_Self20.mp4', '90_5_Mouth_Circle_Down15.mp4', '90_5_Mouth_Circle_Forward13.mp4', '90_5_Mouth_Circle_Self14.mp4', '90_5_Mouth_Lateral_Down18.mp4', '90_5_Mouth_Lateral_Forward16.mp4', '90_5_Mouth_Lateral_Self17.mp4', '90_5_Mouth_Twist_Down12.mp4', '90_5_Mouth_Twist_Forward10.mp4', '90_5_Mouth_Twist_Self11.mp4', '90_5_Neutral_Circle_Down6.mp4', '90_5_Neutral_Circle_Forward4.mp4', '90_5_Neutral_Circle_Self5.mp4', '90_5_Neutral_Lateral_Down9.mp4', '90_5_Neutral_Lateral_Forward7.mp4', '90_5_Neutral_Lateral_Self8.mp4', '90_5_Neutral_Twist_Down3.mp4', '90_5_Neutral_Twist_Forward1.mp4', '90_5_Neutral_Twist_Self2.mp4', '90_8_Elbow_Circle_Down25.mp4', '90_8_Elbow_Circle_Forward23.mp4', '90_8_Elbow_Circle_Self24.mp4', '90_8_Elbow_Lateral_Down28.mp4', '90_8_Elbow_Lateral_Forward26.mp4', '90_8_Elbow_Lateral_Self27.mp4', '90_8_Elbow_Twist_Down22.mp4', '90_8_Elbow_Twist_Forward20.mp4', '90_8_Elbow_Twist_Self21.mp4', '90_8_Mouth_Circle_Down16.mp4', '90_8_Mouth_Circle_Forward14.mp4', '90_8_Mouth_Circle_Self15.mp4', '90_8_Mouth_Lateral_Down19.mp4', '90_8_Mouth_Lateral_Forward17.mp4', '90_8_Mouth_Lateral_Self18.mp4', '90_8_Mouth_Twist_Down13.mp4', '90_8_Mouth_Twist_Forward11.mp4', '90_8_Mouth_Twist_Self12.mp4', '90_8_Neutral_Circle_Down7.mp4', '90_8_Neutral_Circle_Forward5.mp4', '90_8_Neutral_Circle_Self6.mp4', '90_8_Neutral_Lateral_Down10.mp4', '90_8_Neutral_Lateral_Forward8.mp4', '90_8_Neutral_Lateral_Self9.mp4', '90_8_Neutral_Twist_Down4.mp4', '90_8_Neutral_Twist_Forward1.mp4', '90_8_Neutral_Twist_Self3.mp4', '90_10_Elbow_Circle_Down26.mp4', '90_10_Elbow_Circle_Forward24.mp4', '90_10_Elbow_Circle_Self25.mp4', '90_10_Elbow_Lateral_Down30.mp4', '90_10_Elbow_Lateral_Forward28.mp4', '90_10_Elbow_Lateral_Self29.mp4', '90_10_Elbow_Twist_Down23.mp4', '90_10_Elbow_Twist_Forward21.mp4', '90_10_Elbow_Twist_Self22.mp4', '90_10_Mouth_Circle_Down17.mp4', '90_10_Mouth_Circle_Forward15.mp4', '90_10_Mouth_Circle_Self16.mp4', '90_10_Mouth_Lateral_Down20.mp4', '90_10_Mouth_Lateral_Forward18.mp4', '90_10_Mouth_Lateral_Self19.mp4', '90_10_Mouth_Twist_Down14.mp4', '90_10_Mouth_Twist_Forward12.mp4', '90_10_Mouth_Twist_Self13.mp4', '90_10_Neutral_Circle_Down7.mp4', '90_10_Neutral_Circle_Forward5.mp4', '90_10_Neutral_Circle_Self6.mp4', '90_10_Neutral_Lateral_Down11.mp4', '90_10_Neutral_Lateral_Forward10.mp4', '90_10_Neutral_Lateral_Self9.mp4', '90_10_Neutral_Twist_Down3.mp4', '90_10_Neutral_Twist_Forward1.mp4', '90_10_Neutral_Twist_Self2.mp4', '90_A_Elbow_Circle_Down27.mp4', '90_A_Elbow_Circle_Forward25.mp4', '90_A_Elbow_Circle_Self26.mp4', '90_A_Elbow_Lateral_Down30.mp4', '90_A_Elbow_Lateral_Forward28.mp4', '90_A_Elbow_Lateral_Self29.mp4', '90_A_Elbow_Twist_Down24.mp4', '90_A_Elbow_Twist_Forward22.mp4', '90_A_Elbow_Twist_Self23.mp4', '90_A_Mouth_Circle_Down18.mp4', '90_A_Mouth_Circle_Forward16.mp4', '90_A_Mouth_Circle_Self17.mp4', '90_A_Mouth_Lateral_Down21.mp4', '90_A_Mouth_Lateral_Forward19.mp4', '90_A_Mouth_Lateral_Self20.mp4', '90_A_Mouth_Twist_Down15.mp4', '90_A_Mouth_Twist_Forward13.mp4', '90_A_Mouth_Twist_Self14.mp4', '90_A_Neutral_Circle_Down3.mp4', '90_A_Neutral_Circle_Forward1.mp4', '90_A_Neutral_Circle_Self2.mp4', '90_A_Neutral_Lateral_Down2.mp4', '90_A_Neutral_Lateral_Forward7.mp4', '90_A_Neutral_Lateral_Self9.mp4', '90_A_Neutral_Twist_Down1.mp4', '90_A_Neutral_Twist_Forward4.mp4', '90_A_Neutral_Twist_Self5.mp4', '90_Adducted_5_Elbow_Circle_Down24.mp4', '90_Adducted_5_Elbow_Circle_Forward22.mp4', '90_Adducted_5_Elbow_Circle_Self23.mp4', '90_Adducted_5_Elbow_Lateral_Down27.mp4', '90_Adducted_5_Elbow_Lateral_Forward.mp4', '90_Adducted_5_Elbow_Lateral_Self26.mp4', '90_Adducted_5_Elbow_Twist_Down28.mp4', '90_Adducted_5_Elbow_Twist_Forward19.mp4', '90_Adducted_5_Elbow_Twist_Self20.mp4', '90_Adducted_5_Mouth_Circle_Down15.mp4', '90_Adducted_5_Mouth_Circle_Forward13.mp4', '90_Adducted_5_Mouth_Circle_Self14.mp4', '90_Adducted_5_Mouth_Lateral_Down18.mp4', '90_Adducted_5_Mouth_Lateral_Forward16.mp4', '90_Adducted_5_Mouth_Lateral_Self17.mp4', '90_Adducted_5_Mouth_Twist_Down12.mp4', '90_Adducted_5_Mouth_Twist_Forward10.mp4', '90_Adducted_5_Mouth_Twist_Self11.mp4', '90_Adducted_5_Neutral_Circle_Down6.mp4', '90_Adducted_5_Neutral_Circle_Forward4.mp4', '90_Adducted_5_Neutral_Circle_Self5.mp4', '90_Adducted_5_Neutral_Lateral_Down9.mp4', '90_Adducted_5_Neutral_Lateral_Forward7.mp4', '90_Adducted_5_Neutral_Lateral_Self8.mp4', '90_Adducted_5_Neutral_Twist_Down3.mp4', '90_Adducted_5_Neutral_Twist_Forward1.mp4', '90_Adducted_5_Neutral_Twist_Self2.mp4', '90_Adducted_Bent_5_Elbow_Circle_Down26.mp4', '90_Adducted_Bent_5_Elbow_Circle_Forward24.mp4', '90_Adducted_Bent_5_Elbow_Circle_Self25.mp4', '90_Adducted_Bent_5_Elbow_Lateral_Down29.mp4', '90_Adducted_Bent_5_Elbow_Lateral_Forward27.mp4', '90_Adducted_Bent_5_Elbow_Lateral_Self28.mp4', '90_Adducted_Bent_5_Elbow_Twist_Down23.mp4', '90_Adducted_Bent_5_Elbow_Twist_Forward21.mp4', '90_Adducted_Bent_5_Elbow_Twist_Self22.mp4', '90_Adducted_Bent_5_Mouth_Circle_Down17.mp4', '90_Adducted_Bent_5_Mouth_Circle_Forward15.mp4', '90_Adducted_Bent_5_Mouth_Circle_Self16.mp4', '90_Adducted_Bent_5_Mouth_Lateral_Down20.mp4', '90_Adducted_Bent_5_Mouth_Lateral_Self19.mp4', '90_Adducted_Bent_5_Mouth_Twist_Down14.mp4', '90_Adducted_Bent_5_Mouth_Twist_Forward12.mp4', '90_Adducted_Bent_5_Mouth_Twist_Self13.mp4', '90_Adducted_Bent_5_Neutral_Circle_Down8.mp4', '90_Adducted_Bent_5_Neutral_Circle_Forward1.mp4', '90_Adducted_Bent_5_Neutral_Circle_Self7.mp4', '90_Adducted_Bent_5_Neutral_Lateral_Down11.mp4', '90_Adducted_Bent_5_Neutral_Lateral_Forward9.mp4', '90_Adducted_Bent_5_Neutral_Lateral_Self10.mp4', '90_Adducted_Bent_5_Neutral_Twist_Down4.mp4', '90_Adducted_Bent_5_Neutral_Twist_Forward5.mp4', '90_Adducted_Bent_5_Neutral_Twist_Self3.mp4', '90_B_Elbow_Circle_Forward1.mp4', '90_B_Elbow_Circle_Self2.mp4', '90_B_Elbow_Lateral_Down26.mp4', '90_B_Elbow_Lateral_Forward24.mp4', '90_B_Elbow_Lateral_Self25.mp4', '90_B_Elbow_Twist_Down23.mp4', '90_B_Elbow_Twist_Forward21.mp4', '90_B_Elbow_Twist_Self22.mp4', '90_B_Mouth_Circle_Down17.mp4', '90_B_Mouth_Circle_Forward15.mp4', '90_B_Mouth_Circle_Self16.mp4', '90_B_Mouth_Lateral_Down20.mp4', '90_B_Mouth_Lateral_Forward18.mp4', '90_B_Mouth_Lateral_Self19.mp4', '90_B_Mouth_Twist_Down14.mp4', '90_B_Mouth_Twist_Forward12.mp4', '90_B_Mouth_Twist_Self13.mp4', '90_B_Neutral_Circle_Down7.mp4', '90_B_Neutral_Circle_Forward4.mp4', '90_B_Neutral_Circle_Self5.mp4', '90_B_Neutral_Lateral_Down11.mp4', '90_B_Neutral_Lateral_Forward8.mp4', '90_B_Neutral_Lateral_Self9.mp4', '90_B_Neutral_Twist_Down3.mp4', '90_B_Neutral_Twist_Forward1.mp4', '90_B_Neutral_Twist_Self2.mp4', '90_Bent_L_Elbow_Circle_Down25.mp4', '90_Bent_L_Elbow_Circle_Forward23.mp4', '90_Bent_L_Elbow_Circle_Self24.mp4', '90_Bent_L_Elbow_Lateral_Down28.mp4', '90_Bent_L_Elbow_Lateral_Forward26.mp4', '90_Bent_L_Elbow_Lateral_Self27.mp4', '90_Bent_L_Elbow_Twist_Down22.mp4', '90_Bent_L_Elbow_Twist_Forward20.mp4', '90_Bent_L_Elbow_Twist_Self21.mp4', '90_Bent_L_Mouth_Circle_Down16.mp4', '90_Bent_L_Mouth_Circle_Forward14.mp4', '90_Bent_L_Mouth_Circle_Self15.mp4', '90_Bent_L_Mouth_Lateral_Down3.mp4', '90_Bent_L_Mouth_Lateral_Forward1.mp4', '90_Bent_L_Mouth_Lateral_Self2.mp4', '90_Bent_L_Mouth_Twist_Down13.mp4', '90_Bent_L_Mouth_Twist_Forward11.mp4', '90_Bent_L_Mouth_Twist_Self12.mp4', '90_Bent_L_Neutral_Circle_Down7.mp4', '90_Bent_L_Neutral_Circle_Forward4.mp4', '90_Bent_L_Neutral_Circle_Self6.mp4', '90_Bent_L_Neutral_Lateral_Down10.mp4', '90_Bent_L_Neutral_Lateral_Forward8.mp4', '90_Bent_L_Neutral_Lateral_Self9.mp4', '90_Bent_L_Neutral_Twist_Down3.mp4', '90_Bent_L_Neutral_Twist_Forward1.mp4', '90_Bent_L_Neutral_Twist_Self2.mp4', '90_C_Elbow_Circle_Down24.mp4', '90_C_Elbow_Circle_Forward22.mp4', '90_C_Elbow_Circle_Self23.mp4', '90_C_Elbow_Lateral_Down27.mp4', '90_C_Elbow_Lateral_Forward25.mp4', '90_C_Elbow_Lateral_Self26.mp4', '90_C_Elbow_Twist_Down21.mp4', '90_C_Elbow_Twist_Forward19.mp4', '90_C_Elbow_Twist_Self20.mp4', '90_C_Mouth_Circle_Down15.mp4', '90_C_Mouth_Circle_Forward13.mp4', '90_C_Mouth_Circle_Self14.mp4', '90_C_Mouth_Lateral_Down18.mp4', '90_C_Mouth_Lateral_Forward16.mp4', '90_C_Mouth_Lateral_Self17.mp4', '90_C_Mouth_Twist_Down12.mp4', '90_C_Mouth_Twist_Forward10.mp4', '90_C_Mouth_Twist_Self11.mp4', '90_C_Neutral_Circle_Down6.mp4', '90_C_Neutral_Circle_Forward4.mp4', '90_C_Neutral_Circle_Self5.mp4', '90_C_Neutral_Lateral_Down9.mp4', '90_C_Neutral_Lateral_Forward7.mp4', '90_C_Neutral_Lateral_Self8.mp4', '90_C_Neutral_Twist_Down3.mp4', '90_C_Neutral_Twist_Forward1.mp4', '90_C_Neutral_Twist_Self2.mp4', '90_Curved_3_Elbow_Circle_Down25.mp4', '90_Curved_3_Elbow_Circle_Forward23.mp4', '90_Curved_3_Elbow_Circle_Self24.mp4', '90_Curved_3_Elbow_Lateral_Down28.mp4', '90_Curved_3_Elbow_Lateral_Forward26.mp4', '90_Curved_3_Elbow_Lateral_Self27.mp4', '90_Curved_3_Elbow_Twist_Down22.mp4', '90_Curved_3_Elbow_Twist_Forward20.mp4', '90_Curved_3_Elbow_Twist_Self21.mp4', '90_Curved_3_Mouth_Circle_Down15.mp4', '90_Curved_3_Mouth_Circle_Forward13.mp4', '90_Curved_3_Mouth_Circle_Self14.mp4', '90_Curved_3_Mouth_Lateral_Down19.mp4', '90_Curved_3_Mouth_Lateral_Forward17.mp4', '90_Curved_3_Mouth_Lateral_Self18.mp4', '90_Curved_3_Mouth_Twist_Down12.mp4', '90_Curved_3_Mouth_Twist_Forward10.mp4', '90_Curved_3_Mouth_Twist_Self11.mp4', '90_Curved_3_Neutral_Circle_Down6.mp4', '90_Curved_3_Neutral_Circle_Forward4.mp4', '90_Curved_3_Neutral_Circle_Self5.mp4', '90_Curved_3_Neutral_Lateral_Down9.mp4', '90_Curved_3_Neutral_Lateral_Forward7.mp4', '90_Curved_3_Neutral_Lateral_Self8.mp4', '90_Curved_3_Neutral_Twist_Down3.mp4', '90_Curved_3_Neutral_Twist_Forward1.mp4', '90_Curved_3_Neutral_Twist_Self2.mp4', '90_Curved_5_Elbow_Circle_Down24.mp4', '90_Curved_5_Elbow_Circle_Forward22.mp4', '90_Curved_5_Elbow_Circle_Self23.mp4', '90_Curved_5_Elbow_Lateral_Down27.mp4', '90_Curved_5_Elbow_Lateral_Forward25.mp4', '90_Curved_5_Elbow_Lateral_Self26.mp4', '90_Curved_5_Elbow_Twist_Down21.mp4', '90_Curved_5_Elbow_Twist_Forward19.mp4', '90_Curved_5_Elbow_Twist_Self20.mp4', '90_Curved_5_Mouth_Circle_Down15.mp4', '90_Curved_5_Mouth_Circle_Forward13.mp4', '90_Curved_5_Mouth_Circle_Self14.mp4', '90_Curved_5_Mouth_Lateral_Down18.mp4', '90_Curved_5_Mouth_Lateral_Forward16.mp4', '90_Curved_5_Mouth_Lateral_Self17.mp4', '90_Curved_5_Mouth_Twist_Down12.mp4', '90_Curved_5_Mouth_Twist_Forward10.mp4', '90_Curved_5_Mouth_Twist_Self11.mp4', '90_Curved_5_Neutral_Circle_Down6.mp4', '90_Curved_5_Neutral_Circle_Forward4.mp4', '90_Curved_5_Neutral_Circle_Self5.mp4', '90_Curved_5_Neutral_Lateral_Down9.mp4', '90_Curved_5_Neutral_Lateral_Forward7.mp4', '90_Curved_5_Neutral_Lateral_Self8.mp4', '90_Curved_5_Neutral_Twist_Down3.mp4', '90_Curved_5_Neutral_Twist_Forward1.mp4', '90_Curved_5_Neutral_Twist_Self2.mp4', '90_Curved_V_Elbow_Circle_Down26.mp4', '90_Curved_V_Elbow_Circle_Forward24.mp4', '90_Curved_V_Elbow_Circle_Self25.mp4', '90_Curved_V_Elbow_Lateral_Down29.mp4', '90_Curved_V_Elbow_Lateral_Forward27.mp4', '90_Curved_V_Elbow_Lateral_Self28.mp4', '90_Curved_V_Elbow_Twist_Down23.mp4', '90_Curved_V_Elbow_Twist_Forward21.mp4', '90_Curved_V_Elbow_Twist_Self22.mp4', '90_Curved_V_Mouth_Circle_Down17.mp4', '90_Curved_V_Mouth_Circle_Forward15.mp4', '90_Curved_V_Mouth_Circle_Self16.mp4', '90_Curved_V_Mouth_Lateral_Down20.mp4', '90_Curved_V_Mouth_Lateral_Forward18.mp4', '90_Curved_V_Mouth_Lateral_Self19.mp4', '90_Curved_V_Mouth_Twist_Down13.mp4', '90_Curved_V_Mouth_Twist_Forward11.mp4', '90_Curved_V_Mouth_Twist_Self12.mp4', '90_Curved_V_Neutral_Circle_Down6.mp4', '90_Curved_V_Neutral_Circle_Forward4.mp4', '90_Curved_V_Neutral_Circle_Self5.mp4', '90_Curved_V_Neutral_Lateral_Down10.mp4', '90_Curved_V_Neutral_Lateral_Forward8.mp4', '90_Curved_V_Neutral_Lateral_Self9.mp4', '90_Curved_V_Neutral_Twist_Down3.mp4', '90_Curved_V_Neutral_Twist_Forward1.mp4', '90_Curved_V_Neutral_Twist_Self2.mp4', '90_D_Elbow_Circle_Down24.mp4', '90_D_Elbow_Circle_Forward22.mp4', '90_D_Elbow_Circle_Self23.mp4', '90_D_Elbow_Lateral_Down27.mp4', '90_D_Elbow_Lateral_Forward25.mp4', '90_D_Elbow_Lateral_Self26.mp4', '90_D_Elbow_Twist_Down21.mp4', '90_D_Elbow_Twist_Forward19.mp4', '90_D_Elbow_Twist_Self20.mp4', '90_D_Mouth_Circle_Down15.mp4', '90_D_Mouth_Circle_Forward13.mp4', '90_D_Mouth_Circle_Self14.mp4', '90_D_Mouth_Lateral_Down18.mp4', '90_D_Mouth_Lateral_Forward16.mp4', '90_D_Mouth_Lateral_Self17.mp4', '90_D_Mouth_Twist_Down12.mp4', '90_D_Mouth_Twist_Forward10.mp4', '90_D_Mouth_Twist_Self11.mp4', '90_D_Neutral_Circle_Down6.mp4', '90_D_Neutral_Circle_Forward4.mp4', '90_D_Neutral_Circle_Self5.mp4', '90_D_Neutral_Lateral_Down9.mp4', '90_D_Neutral_Lateral_Forward7.mp4', '90_D_Neutral_Lateral_Self8.mp4', '90_D_Neutral_Twist_Down3.mp4', '90_D_Neutral_Twist_Forward1.mp4', '90_D_Neutral_Twist_Self2.mp4', '90_E_Elbow_Circle_Down24.mp4', '90_E_Elbow_Circle_Forward22.mp4', '90_E_Elbow_Circle_Self23.mp4', '90_E_Elbow_Lateral_Down27.mp4', '90_E_Elbow_Lateral_Forward25.mp4', '90_E_Elbow_Lateral_Self26.mp4', '90_E_Elbow_Twist_Down21.mp4', '90_E_Elbow_Twist_Forward19.mp4', '90_E_Elbow_Twist_Self20.mp4', '90_E_Mouth_Circle_Down15.mp4', '90_E_Mouth_Circle_Forward13.mp4', '90_E_Mouth_Circle_Self14.mp4', '90_E_Mouth_Lateral_Down18.mp4', '90_E_Mouth_Lateral_Forward16.mp4', '90_E_Mouth_Lateral_Self17.mp4', '90_E_Mouth_Twist_Down12.mp4', '90_E_Mouth_Twist_Forward10.mp4', '90_E_Mouth_Twist_Self11.mp4', '90_E_Neutral_Circle_Down6.mp4', '90_E_Neutral_Circle_Forward4.mp4', '90_E_Neutral_Circle_Self5.mp4', '90_E_Neutral_Lateral_Down9.mp4', '90_E_Neutral_Lateral_Forward7.mp4', '90_E_Neutral_Lateral_Self8.mp4', '90_E_Neutral_Twist_Down3.mp4', '90_E_Neutral_Twist_Forward1.mp4', '90_E_Neutral_Twist_Self2.mp4', '90_F_Elbow_Circle_Down25.mp4', '90_F_Elbow_Circle_Forward23.mp4', '90_F_Elbow_Circle_Self24.mp4', '90_F_Elbow_Lateral_Down28.mp4', '90_F_Elbow_Lateral_Forward26.mp4', '90_F_Elbow_Lateral_Self27.mp4', '90_F_Elbow_Twist_Down22.mp4', '90_F_Elbow_Twist_Forward20.mp4', '90_F_Elbow_Twist_Self21.mp4', '90_F_Mouth_Circle_Down16.mp4', '90_F_Mouth_Circle_Forward14.mp4', '90_F_Mouth_Circle_Self15.mp4', '90_F_Mouth_Lateral_Down19.mp4', '90_F_Mouth_Lateral_Forward17.mp4', '90_F_Mouth_Lateral_Self18.mp4', '90_F_Mouth_Twist_Down13.mp4', '90_F_Mouth_Twist_Forward11.mp4', '90_F_Mouth_Twist_Self12.mp4', '90_F_Neutral_Circle_Down6.mp4', '90_F_Neutral_Circle_Forward4.mp4', '90_F_Neutral_Circle_Self5.mp4', '90_F_Neutral_Lateral_Down10.mp4', '90_F_Neutral_Lateral_Forward8.mp4', '90_F_Neutral_Lateral_Self9.mp4', '90_F_Neutral_Twist_Down3.mp4', '90_F_Neutral_Twist_Forward1.mp4', '90_F_Neutral_Twist_Self2.mp4', '90_Flat_O_Elbow_Circle_Down25.mp4', '90_Flat_O_Elbow_Circle_Forward23.mp4', '90_Flat_O_Elbow_Circle_Self24.mp4', '90_Flat_O_Elbow_Lateral_Down28.mp4', '90_Flat_O_Elbow_Lateral_Forward26.mp4', '90_Flat_O_Elbow_Lateral_Self27.mp4', '90_Flat_O_Elbow_Twist_Down22.mp4', '90_Flat_O_Elbow_Twist_Forward20.mp4', '90_Flat_O_Elbow_Twist_Self21.mp4', '90_Flat_O_Mouth_Circle_Down16.mp4', '90_Flat_O_Mouth_Circle_Forward14.mp4', '90_Flat_O_Mouth_Circle_Self15.mp4', '90_Flat_O_Mouth_Lateral_Down19.mp4', '90_Flat_O_Mouth_Lateral_Forward17.mp4', '90_Flat_O_Mouth_Lateral_Self18.mp4', '90_Flat_O_Mouth_Twist_Down13.mp4', '90_Flat_O_Mouth_Twist_Forward11.mp4', '90_Flat_O_Mouth_Twist_Self12.mp4', '90_Flat_O_Neutral_Circle_Down7.mp4', '90_Flat_O_Neutral_Circle_Forward5.mp4', '90_Flat_O_Neutral_Circle_Self6.mp4', '90_Flat_O_Neutral_Lateral_Down.mp4', '90_Flat_O_Neutral_Lateral_Forward8.mp4', '90_Flat_O_Neutral_Lateral_Self9.mp4', '90_Flat_O_Neutral_Twist_Down4.mp4', '90_Flat_O_Neutral_Twist_Forward1.mp4', '90_Flat_O_Neutral_Twist_Self3.mp4', '90_G_Elbow_Circle_Down26.mp4', '90_G_Elbow_Circle_Forward26.mp4', '90_G_Elbow_Circle_Self25.mp4', '90_G_Elbow_Lateral_Down29.mp4', '90_G_Elbow_Lateral_Forward27.mp4', '90_G_Elbow_Lateral_Self28.mp4', '90_G_Elbow_Twist_Down22.mp4', '90_G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readme.md', 'S.PNG', 'T.PNG', 'Test_Exp_legacy_lastrun.py', 'Test_Exp_legacy.psyexp', 'Test_Exp-legacy-browsers.js', 'Test_Exp.js', 'Training_Book.xlsx', 'U_H.PNG', 'V.PNG', 'W.PNG', 'X.PNG', 'Y.PNG']
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1512, 982]
  color = -1.0000, -1.0000, -1.0000
  expName = Test_Exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Trials
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    MovieComponent Black_Screen
      backend = ffpyplayer
      forceEndRoutine = False
      movie = My Movie.mp4
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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    MovieComponent Noisy_1
      backend = ffpyplayer
      forceEndRoutine = False
      movie = Noisy_Black_Screen_90.mp4
      size = (2.0, 2.0)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = .5
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    MovieComponent HS_vids
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $HS_VIDS
      size = (1.0, 1.0)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1.0
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    MovieComponent Noisy_2
      backend = ffpyplayer
      forceEndRoutine = False
      movie = Noisy_Black_Screen_90.mp4
      size = (2.0, 2.0)
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = .5
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    ImageComponent one_ulnar
      image = 1_ulnar.PNG
      pos = (-.08, -.08)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent one
      image = 1.PNG
      pos = (-.08, .07)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent Three
      image = 3.PNG
      pos = (-.23, -.23)
      size = (.15, .15) 
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent Four
      image = 4.PNG
      pos = (-.23, -.38)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent Five
      image = 5.PNG
      pos = (-.08, .22)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent Eight
      image = 8.PNG
      pos = (.07, -.08)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent Ten
      image = 10.PNG
      pos = (-.23, -.08)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent A
      image = A.PNG
      pos = (.22, -.08)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent ADD_3
      image = Adducted_3.PNG
      pos = (-.38, -.08)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent ADD_5
      image = Adducted_5.PNG
      pos = (-.23, .37)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent ADD_5_BENT
      image = Adducted_5_bent.PNG
      pos = (.07, .07)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent B
      image = B.PNG
      pos = (-.23, .07)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent BENT_3
      image = Bent_3.PNG
      pos = (-.23, .22)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent BENT_L
      image = Bent_L.PNG
      pos = (.07, .22)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent BENT_V
      image = Bent_V.PNG
      pos = (-.08, -.23)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent Touch_x
      image = bO.PNG
      pos = (-.38, -.23)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent C
      image = C.PNG
      pos = (-.38, -.38)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent Curved_5
      image = Curved_5.PNG
      pos = (.22, .22)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent D
      image = D.PNG
      pos = (.07, -.23)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent E
      image = E.PNG
      pos = (.37, .22)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent F
      image = F.PNG
      pos = (.07, .37)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent Flat_O
      image = Flat_O.PNG
      pos = (-.38, .07)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent G
      image = G.PNG
      pos = (-.08, .37)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent I
      image = i.PNG
      pos = (-.38, .22)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent K
      image = K.PNG
      pos = (.22, .07)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent L_ulnar
      image = L_ulnar.PNG
      pos = (.37, .07)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent L
      image = L.PNG
      pos = (-.38, .37)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent O
      image = O.PNG
      pos = (.22, -.23)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent Open_8
      image = Open_8.PNG
      pos = (.22, .37)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent R
      image = R.PNG
      pos = (-.08, -.38)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent S
      image = S.PNG
      pos = (.07, -.38)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent U_H
      image = U_H.PNG
      pos = (.37, -.23)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent V
      image = V.PNG
      pos = (.37,-.38)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent W
      image = W.PNG
      pos = (.37, -.08)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent X
      image = X.PNG
      pos = (.37, .37)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    ImageComponent Y
      image = Y.PNG
      pos = (.22, -.38)
      size = (.15, .15)
      startVal [time (s)] = 6.6
      stopVal [duration (s)] = 5
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    MouseComponent mouse
      clickable = one_ulnar, one, Three, Four, Five, Eight, Ten, A, ADD_3, ADD_5, ADD_5_BENT, B, BENT_3, BENT_L, BENT_V, Touch_x, C, Curved_5, D, E, F, Flat_O, G, I, K, L_ulnar, L, O, Open_8, R, S, U_H, V, W, X, Y
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Goodbye
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    TextComponent Bye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you for participating, please wait while we save your results...
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  Routine Start
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    KeyboardComponent Welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press Space to Begin 
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  Routine Practice
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    ImageComponent Practice_image
      image [set every repeat] = $Training_Pics
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent One_ulnar
      image = 1_ulnar.PNG
      pos = (-.08, -.08)
      size = (.15, .15)
      startVal [time (s)] = 1.0
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    ImageComponent One
      image = 1.PNG
      pos = (-.08, .07)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent three
      image = 3.PNG
      pos = (-.23, -.23)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent four
      image = 4.PNG
      pos = (-.23, -.38)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent five
      image = 5.PNG
      pos = (-.08, .22)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent eight
      image = 8.PNG
      pos = (.07, -.08)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent ten
      image = 10.PNG
      pos = (-.23, -.08)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent a
      image = A.PNG
      pos = (.22, -.08)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent add_3
      image = Adducted_3.PNG
      pos = (-.38, -.08)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent add_5
      image = Adducted_5.PNG
      pos = (-.23, .37)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent add_bent_5
      image = Adducted_5_bent.PNG
      pos = (.07, .07)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent b
      image = B.PNG
      pos = (-.23, .07)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent bent_3
      image = Bent_3.PNG
      pos = (-.23, .22)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent bent_l
      image = Bent_L.PNG
      pos = (.07, .22)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent bent_v
      image = Bent_V.PNG
      pos = (-.08, -.23)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent touch_x
      image = bO.PNG
      pos = (-.38, -.23)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent c
      image = C.PNG
      pos = (-.38, -.38)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent curved_5
      image = Curved_5.PNG
      pos = (.22, .22)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent d
      image = D.PNG
      pos = (.07, -.23)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent e
      image = E.PNG
      pos = (.37, .22)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent f
      image = F.PNG
      pos = (.07, .37)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent flat_o
      image = Flat_O.PNG
      pos = (-.38, .07)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent g
      image = G.PNG
      pos = (-.08, .37)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent i
      image = i.PNG
      pos = (-.38, .22)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent k
      image = K.PNG
      pos = (.22, .07)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent l_ulnar
      image = L_ulnar.PNG
      pos = (.37, .07)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent l
      image = L.PNG
      pos = (-.38, .37)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent o
      image = O.PNG
      pos = (.22, -.23)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent open_8
      image = Open_8.PNG
      pos = (.22, .37)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent r
      image = R.PNG
      pos = (-.08, -.38)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent s
      image = S.PNG
      pos = (.07, -.38)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent u_h
      image = U_H.PNG
      pos = (.37, -.23)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent v
      image = V.PNG
      pos = (.37,-.38)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent w
      image = W.PNG
      pos = (.37, -.08)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent x_
      image = X.PNG
      pos = (.37, .37)
      size = (.15, .15)
      startVal [time (s)] = 1
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    ImageComponent y_
      image = Y.PNG
      pos = (.22, -.38)
      size = (.15, .15)
      startVal [time (s)] = 1
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    MouseComponent mouse_2
      clickable = One_ulnar, One, three, four, five, eight, ten, a, add_3, add_5, add_bent_5, b, bent_3, bent_l, bent_v, touch_x, c, curved_5, d, e, f, flat_o, g, i, k, l_ulnar, l, o, open_8, r, s, u_h, v, w, x_, y_
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Break
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    MovieComponent Blank
      backend = ffpyplayer
      forceEndRoutine = False
      movie = My Movie.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300
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    TextComponent Continue
      letterHeight = 0.05
      startVal [time (s)] = 301
      text = Press space to continue
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    KeyboardComponent GO
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 301
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  Routine Break_2
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    MovieComponent Blank_2
      backend = ffpyplayer
      forceEndRoutine = False
      movie = My Movie.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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    TextComponent Continue_2
      letterHeight = 0.05
      startVal [time (s)] = 601
      text = Press space to continue
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    KeyboardComponent GO_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 601
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Flow
  Routine Start
  LoopInitiator Training loopType="TrialHandler"
    conditionsFile = Training_Book.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Training_Pics': 'Image10.png'},
      {'Training_Pics': 'Image4.png'},
      {'Training_Pics': 'ImageFlatO.png'},
      {'Training_Pics': 'ImageO.png'},
      {'Training_Pics': 'ImageCurved3.png'},
      {'Training_Pics': 'ImageW.png'},
      {'Training_Pics': 'ImageTouchX.png'},
      {'Training_Pics': 'ImageU.png'},
      {'Training_Pics': 'ImageUlnarL.png'},
      {'Training_Pics': 'Image3.png'},
      {'Training_Pics': 'ImageUlnar1.png'},
      {'Training_Pics': 'Image8.png'},
      {'Training_Pics': 'ImageE.png'},
      {'Training_Pics': 'ImageV.png'},
      {'Training_Pics': 'ImageD.png'},
      {'Training_Pics': 'ImageH_URadial.png'},
      {'Training_Pics': 'ImageCurvedL.png'},
      {'Training_Pics': 'ImageX.png'},
      {'Training_Pics': 'Image1.png'},
      {'Training_Pics': 'ImageCurvedV.png'},
      {'Training_Pics': 'Imagei.png'},
      {'Training_Pics': 'Image5.png'},
      {'Training_Pics': 'ImageB.png'},
      {'Training_Pics': 'ImageL.png'},
      {'Training_Pics': 'ImageCurved5.png'},
      {'Training_Pics': 'ImageG.png'},
      {'Training_Pics': 'ImageOpen8.png'},
      {'Training_Pics': 'ImageK.png'},
      {'Training_Pics': 'ImageA.png'},
      {'Training_Pics': 'ImageAdducted5.png'},
      {'Training_Pics': 'ImageF.png'},
      {'Training_Pics': 'ImageAdductedBent5.png'},
      {'Training_Pics': 'ImageY.png'},
      {'Training_Pics': 'ImageC.png'},
      {'Training_Pics': 'ImageS.png'},
      {'Training_Pics': 'ImageR.png'}]
    Routine Practice
  LoopTerminator Training
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Part_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'HS_VIDS': '90_L_Ulnar_Neutral_Twist_Down3.mp4'},
      {'HS_VIDS': '90_V_Neutral_Lateral_Down12.mp4'},
      {'HS_VIDS': '90_W_Neutral_Twist_Self3.mp4'},
      {'HS_VIDS': '90_1_Ulnar_Neutral_Circle_Forward4.mp4'},
      {'HS_VIDS': '90_Radial_U_Neutral_Twist_Forward1.mp4'},
      {'HS_VIDS': '90_U_Mouth_Twist_Self11.mp4'},
      {'HS_VIDS': '90_Curved_V_Elbow_Lateral_Self28.mp4'},
      {'HS_VIDS': '90_Curved_V_Elbow_Twist_Down23.mp4'},
      {'HS_VIDS': '90_I_Neutral_Twist_Down3.mp4'},
      {'HS_VIDS': '90_C_Mouth_Twist_Down12.mp4'},
      {'HS_VIDS': '90_O_Elbow_Lateral_Down29.mp4'},
      {'HS_VIDS': '90_S_Neutral_Twist_Forward1.mp4'},
      {'HS_VIDS': '90_10_Elbow_Lateral_Down30.mp4'},
      {'HS_VIDS': '90_I_Neutral_Twist_Forward1.mp4'},
      {'HS_VIDS': '90_Radial_U_Neutral_Circle_Down6.mp4'},
      {'HS_VIDS': '90_Bent_L_Mouth_Circle_Forward14.mp4'},
      {'HS_VIDS': '90_A_Elbow_Lateral_Down30.mp4'},
      {'HS_VIDS': '90_B_Neutral_Lateral_Self9.mp4'},
      {'HS_VIDS': '90_Y_Neutral_Lateral_Forward9.mp4'},
      {'HS_VIDS': '90_L_Mouth_Twist_Forward10.mp4'},
      {'HS_VIDS': '90_Radial_8_Elbow_Circle_Forward25.mp4'},
      {'HS_VIDS': '90_S_Elbow_Circle_Self24.mp4'},
      {'HS_VIDS': '90_10_Mouth_Circle_Self16.mp4'},
      {'HS_VIDS': '90_K_Neutral_Lateral_Down11.mp4'},
      {'HS_VIDS': '90_Curved_V_Mouth_Lateral_Self19.mp4'},
      {'HS_VIDS': '90_Radial_8_Mouth_Lateral_Self17.mp4'},
      {'HS_VIDS': '90_G_Mouth_Twist_Down12.mp4'},
      {'HS_VIDS': '90_A_Neutral_Twist_Down1.mp4'},
      {'HS_VIDS': '90_Adducted_5_Neutral_Lateral_Forward7.mp4'},
      {'HS_VIDS': '90_F_Neutral_Twist_Self2.mp4'},
      {'HS_VIDS': '90_Curved_V_Neutral_Circle_Down6.mp4'}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
    Routine Trials
  LoopTerminator trials
  Routine Break
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Part_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'HS_VIDS': '90_3_Elbow_Circle_Self23.mp4'},
      {'HS_VIDS': '90_Curved_5_Elbow_Circle_Forward22.mp4'},
      {'HS_VIDS': '90_3_Neutral_Circle_Forward4.mp4'},
      {'HS_VIDS': '90_Curved_5_Elbow_Twist_Forward19.mp4'},
      {'HS_VIDS': '90_1_Neutral_Twist_Forward1.mp4'},
      {'HS_VIDS': '90_C_Mouth_Lateral_Forward16.mp4'},
      {'HS_VIDS': '90_10_Neutral_Twist_Down3.mp4'},
      {'HS_VIDS': '90_X_Mouth_Circle_Self14.mp4'},
      {'HS_VIDS': '90_S_Neutral_Lateral_Down9.mp4'},
      {'HS_VIDS': '90_Curved_5_Neutral_Lateral_Down9.mp4'},
      {'HS_VIDS': '90_L_Ulnar_Elbow_Lateral_Down27.mp4'},
      {'HS_VIDS': '90_O_Mouth_Circle_Forward15.mp4'},
      {'HS_VIDS': '90_Adducted_Bent_5_Mouth_Lateral_Self19.mp4'},
      {'HS_VIDS': '90_Radial_U_Mouth_Lateral_Self17.mp4'},
      {'HS_VIDS': '90_R_Elbow_Twist_Down25.mp4'},
      {'HS_VIDS': '90_L_Ulnar_Mouth_Lateral_Self17.mp4'},
      {'HS_VIDS': '90_8_Mouth_Twist_Self12.mp4'},
      {'HS_VIDS': '90_K_Mouth_Lateral_Forward18.mp4'},
      {'HS_VIDS': '90_O_Neutral_Twist_Down4.mp4'},
      {'HS_VIDS': '90_G_Mouth_Circle_Forward13.mp4'},
      {'HS_VIDS': '90_L_Neutral_Circle_Forward4.mp4'},
      {'HS_VIDS': '90_D_Elbow_Lateral_Forward25.mp4'},
      {'HS_VIDS': '90_10_Mouth_Circle_Down17.mp4'},
      {'HS_VIDS': '90_K_Elbow_Circle_Forward24.mp4'},
      {'HS_VIDS': '90_F_Elbow_Lateral_Self27.mp4'},
      {'HS_VIDS': '90_3_Elbow_Lateral_Down27.mp4'},
      {'HS_VIDS': '90_Adducted_Bent_5_Neutral_Circle_Self7.mp4'},
      {'HS_VIDS': '90_X_Neutral_Lateral_Down9.mp4'},
      {'HS_VIDS': '90_W_Elbow_Twist_Down22.mp4'},
      {'HS_VIDS': '90_Flat_O_Elbow_Twist_Forward20.mp4'},
      {'HS_VIDS': '90_10_Mouth_Lateral_Forward18.mp4'}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
    Routine Trials
  LoopTerminator trials_2
  Routine Break_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Part_3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'HS_VIDS': '90_D_Neutral_Lateral_Down9.mp4'},
      {'HS_VIDS': '90_L_Mouth_Circle_Self14.mp4'},
      {'HS_VIDS': '90_E_Mouth_Twist_Down12.mp4'},
      {'HS_VIDS': '90_Curved_5_Elbow_Twist_Self20.mp4'},
      {'HS_VIDS': '90_S_Elbow_Circle_Down25.mp4'},
      {'HS_VIDS': '90_C_Neutral_Circle_Self5.mp4'},
      {'HS_VIDS': '90_4_Neutral_Circle_Forward4.mp4'},
      {'HS_VIDS': '90_F_Neutral_Twist_Down3.mp4'},
      {'HS_VIDS': '90_C_Neutral_Lateral_Self8.mp4'},
      {'HS_VIDS': '90_G_Elbow_Twist_Self21.mp4'},
      {'HS_VIDS': '90_Radial_U_Elbow_Circle_Forwawrd22.mp4'},
      {'HS_VIDS': '90_Curved_3_Neutral_Lateral_Down9.mp4'},
      {'HS_VIDS': '90_Curved_3_Neutral_Lateral_Self8.mp4'},
      {'HS_VIDS': '90_K_Elbow_Twist_Self22.mp4'},
      {'HS_VIDS': '90_3_Mouth_Circle_Forward13.mp4'},
      {'HS_VIDS': '90_R_Neutral_Lateral_Self10.mp4'},
      {'HS_VIDS': '90_R_Mouth_Twist_Self13.mp4'},
      {'HS_VIDS': '90_A_Elbow_Lateral_Self29.mp4'},
      {'HS_VIDS': '90_Adducted_5_Neutral_Lateral_Down9.mp4'},
      {'HS_VIDS': '90_Adducted_Bent_5_Mouth_Circle_Self16.mp4'},
      {'HS_VIDS': '90_R_Neutral_Circle_Forward6.mp4'},
      {'HS_VIDS': '90_F_Mouth_Twist_Down13.mp4'},
      {'HS_VIDS': '90_Radial_8_Neutral_Lateral_Forward7.mp4'},
      {'HS_VIDS': '90_C_Elbow_Twist_Forward19.mp4'},
      {'HS_VIDS': '90_3_Neutral_Twist_Forward1.mp4'},
      {'HS_VIDS': '90_1_Ulnar_Elbow_Twist_Forward19.mp4'},
      {'HS_VIDS': '90_Flat_O_Mouth_Lateral_Down19.mp4'},
      {'HS_VIDS': '90_I_Mouth_Circle_Self16.mp4'},
      {'HS_VIDS': '90_Bent_L_Elbow_Circle_Self24.mp4'},
      {'HS_VIDS': '90_Adducted_5_Elbow_Lateral_Self26.mp4'},
      {'HS_VIDS': '90_8_Neutral_Twist_Forward1.mp4'}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
    Routine Trials
  LoopTerminator trials_3
  Routine Break
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = Part_4 .xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'HS_VIDS': '90_8_Neutral_Twist_Self3.mp4'},
      {'HS_VIDS': '90_L_Ulnar_Neutral_Circle_Down6.mp4'},
      {'HS_VIDS': '90_Flat_O_Neutral_Lateral_Self9.mp4'},
      {'HS_VIDS': '90_K_Neutral_Circle_Forward4.mp4'},
      {'HS_VIDS': '90_8_Elbow_Lateral_Down28.mp4'},
      {'HS_VIDS': '90_Adducted_Bent_5_Mouth_Lateral_Down20.mp4'},
      {'HS_VIDS': '90_C_Neutral_Lateral_Down9.mp4'},
      {'HS_VIDS': '90_F_Mouth_Twist_Forward11.mp4'},
      {'HS_VIDS': '90_Bent_L_Mouth_Twist_Forward11.mp4'},
      {'HS_VIDS': '90_Y_Mouth_Lateral_Forward18.mp4'},
      {'HS_VIDS': '90_5_Neutral_Twist_Self2.mp4'},
      {'HS_VIDS': '90_K_Neutral_Circle_Down7.mp4'},
      {'HS_VIDS': '90_I_Neutral_Lateral_Self10.mp4'},
      {'HS_VIDS': '90_1_Neutral_Lateral_Forward7.mp4'},
      {'HS_VIDS': '90_R_Mouth_Lateral_Self20.mp4'},
      {'HS_VIDS': '90_10_Mouth_Lateral_Down20.mp4'},
      {'HS_VIDS': '90_Curved_5_Elbow_Lateral_Self26.mp4'},
      {'HS_VIDS': '90_Bent_L_Mouth_Circle_Down16.mp4'},
      {'HS_VIDS': '90_Bent_L_Mouth_Circle_Self15.mp4'},
      {'HS_VIDS': '90_4_Mouth_Circle_Forward13.mp4'},
      {'HS_VIDS': '90_W_Mouth_Circle_Self15.mp4'},
      {'HS_VIDS': '90_Flat_O_Elbow_Circle_Self24.mp4'},
      {'HS_VIDS': '90_A_Neutral_Twist_Forward4.mp4'},
      {'HS_VIDS': '90_E_Elbow_Lateral_Self26.mp4'},
      {'HS_VIDS': '90_Adducted_5_Elbow_Lateral_Down27.mp4'},
      {'HS_VIDS': '90_Adducted_5_Elbow_Circle_Down24.mp4'},
      {'HS_VIDS': '90_W_Mouth_Circle_Down16.mp4'},
      {'HS_VIDS': '90_3_Elbow_Twist_Self20.mp4'},
      {'HS_VIDS': '90_Y_Neutral_Circle_Forward6.mp4'},
      {'HS_VIDS': '90_Touch_X_Elbow_Circle_Self23.mp4'},
      {'HS_VIDS': '90_L_Ulnar_Elbow_Lateral_Forward25.mp4'}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
    Routine Trials
  LoopTerminator trials_4
  Routine Goodbye
